PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '1', 'run_number': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1, -1, -1]
  expName = DEV
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Routines
  Routine trial
    PolygonComponent fixation
      durationEstim = 2
      fillColor = $[1,1,1]
      shape = cross
      size = (48, 48)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_duration
      units = pix
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    ImageComponent stimulus_image
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startEstim = 2
      startVal [time (s)] = $jitter_duration
      stopVal [duration (s)] = 6.5
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    TextComponent bid_cue
      letterHeight = 0.05
      pos = (0, 0.4)
      startEstim = 6
      startVal [time (s)] = $jitter_duration + 4
      stopVal [duration (s)] = 2.5
      text = How much would you pay to eat this food?
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    ImageComponent bid_key_image
      image = task/BidKeys.bmp
      pos = (0, -0.4)
      startEstim = 6
      startVal [time (s)] = $jitter_duration + 4
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startEstim = 6
      startVal [time (s)] = $jitter_duration + 4
      stopVal [duration (s)] = 2.5
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  Routine instructions
    CodeComponent set_start_text
      Code Type = Py
      Begin Experiment:
        #
        # Determine the input conditions file based on the session number.
        # Session numbers 1 and 2 are behavioral, not in the scanner.
        # Session numbers 3, 4, and 5 are performed in the MRI scanner.
        # Display different start text / instructions for behavioral sessions compared with MRI scan sessions.
        session = expInfo['session']
        if is_mri_session(session):
            start_text_str = 'Calibrating scanner.\nPlease hold very still.'
        else:
            start_text_str = 'The task is about to begin.\nGet ready!'
        conditions_file = f'DEV{participant}_{run_number}_conditions.csv'
    TextComponent start_text
      durationEstim = 3
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_text_str
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    KeyboardComponent start_trigger
      allowedKeys = '1', '2', '3', '4', 'apostrophe'
      durationEstim = 3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = The task is now complete.
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  Routine auction
    CodeComponent auction_code
      Code Type = Py
      Begin Experiment:
        auction_results = ''
      Begin Routine:
        #
        # Custom code to run auction at end of WTP task. At end of session,
        # randomly select a food, randomly determine a bid,
        # then compare with participant's bid. If the participant's bid is
        # higher, then they get the food and the difference between their bid and the maximum.
        participant = expInfo['participant']
        session = expInfo['session']
        run_number = expInfo['run_number']
        if ((session == '1' or session == '2') and run_number == '4') or ((session == '3' or session == '4' or session == '5') and run_number == '2'):
            from numpy.random import choice
            from psychopy.misc import fromFile

            available_food = ['Almonds.bmp'
                              'Cashews.bmp',
                              'ClifBar1.bmp',
                              'ClifBar2.bmp',
                              'FruitLeather.bmp',
                              'Peanuts.bmp',
                              'BarbequeChips.bmp',
                              'Cheetos.bmp',
                              'CoolRanchDoritos.bmp',
                              'Doritos.bmp',
                              'Fritos.bmp',
                              'Oreos.bmp',
                              'PotatoChips.bmp',
                              'RiceKrispiesTreat.bmp',
                              'SourCreamChips.bmp']
            # Get computer generated bid
            bid = choice([1, 2, 3, 4])
            bid_as_currency = ['blank', '$0.00', '$0.50', '$1.00', '$1.50']
            if is_mri_session(session):
                bid = 1

            # Get all the foods bid on, by this participant, then create the intersection
            # with the foods that are available, then randomly select a food from the intersection
            image_bid_dict = {}
            for image, bid_key in zip(trials.trialList, trials.data['response.keys']):
                if bid_key is None:
                    bid_key = 0
                image_bid_dict[os.path.basename(image)] = int(bid_key)

            if is_mri_session(session):
                runs = ['1', '2', '3']
            else:
                runs = ['1']
            for run in runs:
                file_name = 'DEV' + participant + '.' + session + '.' + run + '.psydat'
                data_file = fromFile(os.path.join(output_dir, file_name))
                for trial_number, condition in enumerate(data_file.loops[0].trialList):
                    image = condition['image_file']
                    bid_key = data_file.entries[trial_number]['response.keys']
                    image_bid_dict[os.path.basename(image)] = int(bid_key)
            intersect = set(image_bid_dict.keys()) & set(available_food)
            food = choice(list(intersect))
            participant_bid = int(image_bid_dict[food])

            # If the participant bid still can't be found, in the current run or previous runs,
            # use 1 to indicate the lowest possible bid.
            if participant_bid is None:
                participant_bid = 1

            if participant_bid >= bid:
                match_text = 'Match. You will receive this snack.'
            else:
                match_text = 'No match. You will not receive this snack.'

            auction_results = f'---------------\n' \
                              f'Auction results\n' \
                              f'---------------\n' \
                              f'Food selected: {food}\n' \
                              f'Participant bid: {bid_as_currency[participant_bid]}\n' \
                              f'Random bid: {bid_as_currency[bid]}\n\n' \
                              f'{match_text}\n' \
                              f'Money left: ' + bid_as_currency[(4 - participant_bid) + 1]
            print(auction_results)
        else:
            continueRoutine = False
    TextComponent auction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $auction_results
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  Routine setup
    CodeComponent set_output_file
      Code Type = Py
      Begin Experiment:
        output_dir = os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks', 'WTP', 'output', expName + expInfo['participant'])
        # Create output filename like: DEV123.3.4.csv
        output_filename = expName + expInfo['participant'] + '.' + expInfo['session'] + '.' + expInfo['run_number']
        thisExp.dataFileName = os.path.join(output_dir, output_filename)
        filename = os.path.join(output_dir, output_filename)
        logging.LogFile(filename + '.log', level=logging.EXP)
    CodeComponent create_conditions_files
      Code Type = Py
      Begin Experiment:
        import os
        from operator import itemgetter
        from numpy.random import shuffle


        def is_mri_session(session: str) -> bool:
            return session == '1' or session == '2'


        def get_trial_order(session: str, c1, c2, c3, c4):
            # c1 corresponds to unhealthy_liked condition
            # c2 corresponds to healthy_liked
            # c3 corresponds to unhealthy_disliked
            # c4 corresponds to healthy_disliked
            if is_mri_session(session):
                return [c1[0], c2[0], c2[1],
                c3[0], c1[1], c4[0],
                c1[2], c3[1], c2[2],
                c4[1], c3[2], c3[3],
                c4[2], c4[3], c2[3], c1[3]]
            else:
                return [c1[0], c2[0], c2[1],
                c3[0], c1[1], c4[0],
                c1[2], c3[1], c2[2],
                c4[1], c3[2], c3[3],
                c4[2], c4[3], c2[3], c1[3],
                c1[4], c2[4], c2[5],
                c3[4], c1[5], c4[4],
                c1[6], c3[5], c2[6],
                c4[5], c3[6], c3[7],
                c4[6], c4[7], c2[7], c1[7]]


        def get_jitter(session: str, size: int):
            if is_mri_session(session):
                return [3,
                        3,
                        1.78028293099451,
                        0.0951171473581233,
                        2.68096584793926,
                        0.319097227741995,
                        1.83219376832774,
                        2.08366133639649,
                        1.58406048619078,
                        0.800571063726905,
                        0.665878598015893,
                        0.925946125518181,
                        0.670864756249938,
                        0.859947179153415,
                        0.333112567100657,
                        1.42165177522370]
            else:
                return [1.0] * size


        def write_conditions_file(trial_order, jitter):
            condition_file = f'DEV{participant}_0_conditions.csv'
            with open(condition_file, mode='w') as f:
                f.write('image_file,jitter_duration\n')
                for c, j in zip(trial_order, jitter):
                    f.write(f'{c},{j}\n')


        participant = expInfo['participant']
        session = expInfo['session']
        run_number = expInfo['run_number']
        if run_number == '0':
            image_path = os.path.join('task', 'foodpics', '_practice')
            temp = os.listdir(image_path)
            trial_order = [os.path.join(image_path, i) for i in temp]
            write_conditions_file(trial_order, [1.0] * len(trial_order))
            continueRoutine = False

        # There are always 4 conditions: healthy_liked, unhealthy_liked, healthy_disliked, and unhealthy_disliked
        # In MRI sessions, display 4 images from each condition. In behavioral sessions,
        # display 8 images from each condition.
        num_conditions = 4
        if is_mri_session(session):
            num_images = 4
            num_runs = 4
        else:
            num_images = 8
            num_runs = 2

        # Create input files, for all runs, based on ImageSelection task output only in run 1.
        if run_number == '1':
            image_selection_output = os.path.join(os.path.expanduser('~'), 'Dropbox (PfeiBer Lab)', 'Devaluation', 'Tasks', 'ImageSelection', 'output', 'WTP', 'DEV' + participant + '_ratings.csv')
            image_selection = []
            with open(image_selection_output) as f:
                for line in f:
                    image_selection.append(line.strip().split(','))

            # image_selection output is a CSV file with three fields: rating, healthy or unhealthy, image file name
            # Sort by healthy v. unhealthy, then sort by ratings.
            image_selection.sort(key=itemgetter(1, 0))
            for i, r in enumerate(image_selection):
                if r[1] == '1':
                    unhealthy = [os.path.join('task', 'foodpics', 'unhealthy', rr[2]) for rr in image_selection[:i]]
                    healthy = [os.path.join('task', 'foodpics', 'healthy', rr[2]) for rr in image_selection[i:]]
                    break

            for i in range(num_runs):
                unhealthy_liked = unhealthy[-num_images:]
                shuffle(unhealthy_liked)
                unhealthy_disliked = unhealthy[:num_images]
                shuffle(unhealthy_disliked)
                unhealthy = unhealthy[num_images:-num_images]
                healthy_liked = healthy[-num_images:]
                shuffle(healthy_liked)
                healthy_disliked = healthy[:num_images]
                shuffle(healthy_disliked)
                healthy = healthy[num_images:-num_images]

                trial_order = get_trial_order(session, unhealthy_liked, healthy_liked, unhealthy_disliked, healthy_disliked)
                jitter = get_jitter(session, num_conditions * num_images)

                condition_file = f'DEV{participant}_{i+1}_conditions.csv'
                with open(condition_file, mode='w') as f:
                    f.write('image_file,jitter_duration\n')
                    for c, j in zip(trial_order, jitter):
                        f.write(f'{c},{j}\n')
Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine auction
  Routine end
